' ------------------------------------------------------------------------------
' SINE - CALIBRATION PROTOCOL (REQUIRES SPIKE2 VERSION 10)
'
' Values for local (rig-specific) variables are stored in the system registry: 
' HKEY_CURRENT_USER\Software\CED\Spike2\RigParams
' 
' ------------------------------------------------------------------------------

' Set the sequencer file to use for the protocol
const sequencerFile$ := "sine_protocols/sine_calibration.pls";

' This file is the same for all SINE protocols
#include "sine_core.s2s"

' Calibration block parameters
var calBlockDuration := 10; '120;  'Total duration (s) to run calibration block [default 120]
var calTargetFPS := 100;  'Target frames-per-second to generate TTL5 pulses [default 100]

' Calculate number of cycles needed for calibration block
var nCalBlockCycles% := Round(calBlockDuration * chairFreq) + 1;

'Convert FPS to sequencer tick values
var calTargetTicks% := FpsToSequencerTicksMs(calTargetFPS); 

' Generate the simple calibration block list
trainingType% := 1;  'Change default stimulus type to VORx2
blockList$[0] := "Qq";
blockLabelList$[0] := "CAL";
nBlocks% := Len(blockList$[]);
PrintLog("\nBlock list generated:  ", blockList$[]);
PrintLog("Block labels:          ", blockLabelList$[], "\n");

' TODO: 
'     1. Some of these variables should come from an external source
'     2. CMD$ needs to get rebuilt whenever calibration settings are changed
PrintLog("FilePath$(0) = %s\n", FilePath$(0));
PrintLog("FilePath$(1) = %s\n", FilePath$(1));
PrintLog("FilePath$(2) = %s\n", FilePath$(2));

var rlc2Path$:= "\"" + Replace$(rootpath$, "spike2_experimental_protocols", "");
var PY$ := rlc2Path$ + ".venv/Scripts/python.exe\"";
var TOOLPATH$ := " " + rlc2Path$ + "eye_sensor_calibration/recording_app/eye-calibration-recording.py\"";
VAR DUR$ := " --seconds "+Str$(calBlockDuration);
VAR CALFPS$ := " --pulse-hz "+Str$(calTargetFPS);
var OUTPATH$ := " --out \"C:/Temp/test\"";
var FLAGPATH$ := "C:/Temp/eyecal_ready.flag";
var CMD$ := PY$ + TOOLPATH$ + DUR$ + CALFPS$ + OUTPATH$;

PrintLog("rlc2Path$ = %s\n\n", rlc2Path$);
PrintLog("PY$ = %s\n", PY$);
PrintLog("TOOLPATH$ = %s\n", TOOLPATH$);
PrintLog("CMD$ = %s\n\n", CMD$);

ToolbarStartup();


'--------------------------------------------------------------------------------
' PROTOCOL-SPECIFIC TOOLBAR-RELATED FUNCTIONS
'--------------------------------------------------------------------------------
' Updates sampling window with protocol-specific configuration
Proc WindowUpdate()
    ' Create Virtual Channels that show the instantaneous frequency of the camera strobes
    var TTL5freq_ch% := VirtualChan(0, "", 0, 0.001);
    VirtualChan(TTL5freq_ch%, "IF("+Str$(TTL5_ch%)+")", 0, 1.0/sampleRate);
    ChanUnits$(TTL5freq_ch%, "Hz");
    ChanTitle$(TTL5freq_ch%, "TTL5if"); 
    ChanComment$(TTL5freq_ch%, "TTL5 Instantaneous Frequency");

    var TTL6freq_ch% := VirtualChan(0, "", 0, 0.001);
    VirtualChan(TTL6freq_ch%, "IF("+Str$(TTL6_ch%)+")", 0, 1.0/sampleRate);
    ChanUnits$(TTL6freq_ch%, "Hz");
    ChanTitle$(TTL6freq_ch%, "TTL6if"); 
    ChanComment$(TTL6freq_ch%, "TTL6 Instantaneous Frequency");

    ' Ensure calibration-related channels are not hidden
    ChanShow(Str$(TTL2_ch%)+","+Str$(TTL5_ch%)+","+Str$(TTL6_ch%)+","+Str$(TTL5freq_ch%)+","+Str$(TTL6freq_ch%));
End

' Initializes and enables our toolbar functions
Proc ToolbarStartup()
    const initialDisabled%[] := {40}; 
    ToolbarClear();
    ToolbarSet(0, "Idle", ToolbarIdle%);
    ToolbarSet(1, "Quit", ToolbarQuit%);
    ToolbarSet(2, "New File", ToolbarNewFile%);
    ToolbarSet(3, "Calib Settings", ToolbarCalibSettings%);
    ToolbarSet(40, "Run Expmt", ToolbarRunExpmt%);
    ToolbarEnable(initialDisabled%, 0); 
    Toolbar("", 231);
End

' Updates settings values whenever another value is changed
Func UpdateCalibSettings%(item%) 
    var trainingType_value% := DlgValue(1);
    var calBlockDuration_value := DlgValue(2);
    var calTargetFPS_value := DlgValue(3);
    var drumAmp_value := DlgValue(4);
    var drumFreq_value := DlgValue(5);
    var chairAmp_value := DlgValue(6);
    var chairFreq_value := DlgValue(7);

    ' Ensure drumAmp and chairAmp are valid values
    if (item% = 4 and drumAmp_value = 0) or (item% = 6 and chairAmp_value = 0) then
        Message("Zero deg/s is not a valid value for experiments.\nVelocities wil be reset to default values.");
        drumAmp_value := 10.0;
        chairAmp_value := -10.0;
        DlgValue(4, drumAmp_value);
        DlgValue(6, chairAmp_value);
    endif;

    docase
        case item% = 4 then 
            DlgValue(6, (-1) * drumAmp_value);
        case item% = 5 then 
            DlgValue(7, drumFreq_value);
        case item% = 6 then
            DlgValue(4, (-1) * chairAmp_value);
        case item% = 7 then 
            DlgValue(5, chairFreq_value);
    endcase;

    return 1;
End

' Settings window for modifying general experimental parameters
Func ToolbarCalibSettings%()
    var width% := 85;
    DlgCreate("CALIBRATION SETTINGS", 0, 0, width%, 10);  'Initialize new dialog window

    var col1box% := 31;
    var col1width% := col1box% + 12;
    DlgText("Stimulus type:", 4, 2);
    DlgList(1, 20, "VOR-Dark|VORx2-GainUp|OKR", 9, col1box%-9, 2);
    DlgText("Calibration duration (s):", 4, 3);
    DlgReal(2, 11, 0.001, 9999.0, col1box%, 3, 0);
    DlgText("Target FPS:", 4, 4);
    DlgReal(3, 11, 1.0, 999.0, col1box%, 4, 0);

    ' Drum parameters boxes
    var col2txt% := col1width% + 6; 
    var col2box% := col2txt% + 21;
    var col2width% := 36;
    DlgText("Velocity (deg/s):", col2txt%, 2);
    DlgReal(4, 11, -50.0, 50.0, col2box%, 2, 0);
    DlgText("Frequency (Hz):", col2txt%, 3);
    DlgReal(5, 11, 0.1, 10.0, col2box%, 3, 0);

    ' Chair parameters boxes
    DlgText("Velocity (deg/s):", col2txt%, 6);
    DlgReal(6, 11, -50.0, 50.0, col2box%, 6, 0);
    DlgText("Frequency (Hz):", col2txt%, 7);
    DlgReal(7, 11, 0.1, 10.0, col2box%, 7, 0);
     
    DlgAllow(0x3ff, ToolbarIdle%, UpdateCalibSettings%);  'Allow all, no idle, update settings function
    var gp1% := DlgGroup("General Parameters", 2, 1, col1width%, 4.5);
    var gp2% := DlgGroup("Drum Parameters", col2txt%-2, 1, col2width%, 3.5);
    var gp3% := DlgGroup("Chair Parameters", col2txt%-2, 5, col2width%, 3.5);

    DlgShow(trainingType%, calBlockDuration, calTargetFPS, drumAmp, drumFreq, chairAmp, chairFreq);

    ' Re-calculate number of calibration block cyles
    nCalBlockCycles% := Round(calBlockDuration * chairFreq) + 1;

    ' Re-calculate FPS in sequencer ticks
    calTargetTicks% := FpsToSequencerTicksMs(calTargetFPS);

    ' Re-compute sine_core values
    period% := Round(sampleRate / chairFreq);
    halfCycle := (sampleRate/chairFreq) / 2;
    quarterCycle := halfCycle / 2;

    drumSinPosMean := (-1 * drumAmp / (2 * _pi * drumFreq)) * sin(drumPhase * (_pi / 180));
    chairSinPosMean := (-1 * chairAmp / (2 * _pi * chairFreq)) * sin(chairPhase * (_pi / 180));
    PrintLog("New Drum Sine Mean Target Amplitude:  ", drumSinPosMean);
    PrintLog("New Chair Sine Mean Target Amplitude:  ", chairSinPosMean);

    ' Send new variable values to the sequencer
    SetSequencerValues();

    return 1;
End

Func FpsToSequencerTicksMs(fps)
    const seqTickMs := 1.0; 'This MUST match SET directive in sine_calibration.pls
    var t;
    if (fps <= 0) or (seqTickMS <= 0) then return 0 endif;
    t := 1000.0 / (fps * seqTickMs);
    if t < 4.0 then t := 4.0 endif;  'Floor: keeps S-option duty within reasonable limits
    if t > 2147483647.0 then t := 2147483647.0 endif;
    PrintLog("Camera Target Sequencer Ticks per Second:  ", t);
    return Round(t);
End


'--------------------------------------------------------------------------------
' SEND CURRENT SPIKE2 VARIABLE VALUES TO SEQUENCER
'--------------------------------------------------------------------------------
Proc SetSequencerValues()
    ' Drum parameters
    SampleSeqVar(2, Amp2Int32%(drumVelocityOffset, drumVelocity2Voltage));  'DrumOff
    SampleSeqVar(3, Amp2Int16%(drumAmp, drumVelocity2Voltage));             'DrumAmp
    SampleSeqVar(4, Hz2Int32%(drumFreq));                                   'DrumFrq
    SampleSeqVar(5, Angle2Int32%(drumPhase));                               'DrumPhs
    SampleSeqVar(7, nCalBlockCycles%);                                      'NdrumP
    SampleSeqVar(8, nCalBlockCycles%);                                      'NdrumT

    ' Chair parameters
    SampleSeqVar(10, Amp2Int32%(chairVelocityOffset, chairVelocity2Voltage));  'ChairOff
    SampleSeqVar(11, Amp2Int16%(chairAmp, chairVelocity2Voltage));             'ChairAmp
    SampleSeqVar(12, Hz2Int32%(chairFreq));                                    'ChairFrq
    SampleSeqVar(13, Angle2Int32%(chairPhase));                                'ChairPhs
    SampleSeqVar(15, nCalBlockCycles%);                                        'NchairP
    SampleSeqVar(16, nCalBlockCycles%);                                        'NchairT

    ' Protocol-specific parameters
    SampleSeqVar(22, trainingType%);  'TrainTyp
    SampleSeqVar(23, calTargetTicks%);  'CamFps
End


'--------------------------------------------------------------------------------
' ADDITIONAL PROTOCOL-SPECIFIC FUNCTIONS
'--------------------------------------------------------------------------------
Func BeforeBlockFunc(bNum%, bStartT, upSampKey$)
    ' Any additional actions can be defined here 
    RunPythonEyeCalTool(bNum%, bStartT, upSampKey$);
End

Func AfterBlockFunc(bNum%, bEndT, lowSampKey$)
    ' Any additional actions can be defined here
    var SAVEPATH$, smrxOK%, smrOK%, nCh%, list%[2001];

    Yield(2);
    runFlag% := 0;  'Set experiment flag to off
    SampleKey("R");  'Reset 1401 sequencer to initial state
    SampleText("END", -1, 0); 
    SampleKey("a");  'Sends a lower-case keyboard command that defines the end of the experiment (useful only for analysis)
    ToolbarSet(40, "Run Expmt", ToolbarRunExpmt%);
    Yield(1);

    if ViewKind() <> 0 then return -1 endif;
    var msgBoxStatus% := CalCompleteMessageBox();

    if SampleStatus() = 2 then SampleStop(); endif;
    XRange();  'Zoom out to view entire experiement

    if msgBoxStatus% = 1 then
        var fh% := FileOpen(FLAGPATH$, 8, 0);
        Read(SAVEPATH$);
        FileClose();
        PrintLog("\n[%g] Read save file path from flag: %s\n", fh%, SAVEPATH$);

        ' Save Native 64-bit SMRX file
        PrintLog("Saving SMRX and SMR files to save file path...\n\n");
        smrxOK% := FileSaveAs(savePath$ + "\\calibration.smrx", -1);
        if smrxOK% = 0 then
            PrintLog("SMRX saved successfully!\n");
            ' Work out valid channel count for 32-bit SMR file
            nCh% := ChanList(list%[], 0x2063ff);  'Disk channels present
            if nCh% < 32 then nCh% := 32 endif;
            if nCh% > 64 then nCh% := 64 endif;  'Defines the hard limit for SMR files
            ' Export the 32-bit SMR file
            ExportChanList(2);  'Clear list (RealWave -> Waveform)
            ExportChanList(0.0, MaxTime(), -1);  'Whole file (all channels)
            smrOK% := FileSaveAs(savePath$ + "\\calibration.smr", 0, 1, "", nCh%, 1);
            if smrOK% = 0 then
                PrintLog("SMR saved successfully!\n");
            else
                PrintLog("WARNING: SMR saved unsuccessfully!\n");
            endif;
        else
            PrintLog("WARNING: SMRX and SMR files saved unsuccessfully!\n");
        endif;
    else
        PrintLog("Cancelled: This recording will not be saved!\n");
    endif;
    
    halt;
    return 0;
End

Func RunPythonEyeCalTool(bNum%, bStartT, upSampKey$)
    FileDelete(FLAGPATH$);

    PrintLog("\nLaunching Eye Calibration Image Acquisition Window: \n%s\n\n", CMD$);
    var st% := 0;
    var fh% := -1;
    if SampleStatus() = 0 then SampleStart(); endif;
    var hProg% := ProgRun(cmd$, 1, 10, 15, 85, 80);
    PrintLog("Eye Calibration Image Acquisition Window running...\n");
    repeat
        ' Apply motor drift correction while window is running
        driftFix%(); Yield(0.05);
        st% := ProgStatus(hProg%);
        fh% := FileStatus(FLAGPATH$);
    until (fh% <> -1) or (st% <> 1);

    if st% <> 1 then 
        PrintLog("\nImage Acquisition Window cancelled - HALTING!\n");
        if SampleStatus() = 2 then SampleStop(); endif;
        return 0;
    endif;

    PrintLog("Running %g sinusoidal stimulus cycles...\n", nCalBlockCycles%+1);
    AddTextMark("", -1, "-START");  'Add a TextMark key to denote the start of a block and/or event
    SampleKey("P");  'Send SampleKey() command to the 1401 sequencer of the current block's letter marker
    repeat
        driftFix%(); Yield(0.05);
        st% := ProgStatus(hProg%);
    until st% <> 1;
    PrintLog("Image Acquisition Window closed with %g status...\n", st%);

    AddTextMark("", -1, "-STOP");
    return 1;
End

Func CalCompleteMessageBox()
    DlgCreate("CALIBRATION COMPLETED!", 0, 0, 72, 3);  'Initialize new dialog window
    var msgText$ := "Please disengage drum/chair motors before continuing. SAVE THIS RECORDING?";
    DlgText(msgText$, 3, 1);
    DlgAllow(0x3ff, ToolbarIdle%);  'Allow all, no idle, update settings function
    var msgStatus := DlgShow();

    return msgStatus;
End

Func AddTextMark(samplekey$, blocknumber%, suffixStr$)
    ' Search Index "Marker codes, Colour for" for more info on marker code colors
    var text$, code%;
    text$ := "CAL"+suffixStr$;
    code% := 2;
    return SampleText(text$, -1, code%);
End