' ------------------------------------------------------------------------------
' SINE - CORE SCRIPT USED BY ALL SINE PROTOCOLS (REQUIRES SPIKE2 VERSION 10)
'
' Contains variables/functions that are shared by all sine protocols
' ------------------------------------------------------------------------------
' Define the parent directory all other paths will be relative to
const rootpath$ := "C:/Users/Public/RaymondLabCode2/spike2_experimental_protocols";
FilePathSet(rootpath$, 0);

' These files are the same for ALL EXPERIMENTAL protocols
#include "../utils/read_write_rig_params.s2s"
#include "../utils/sampling_window_config.s2s"
#include "../utils/unit_conversion_functions.s2s"

' Load rig-specific parameters from local-computer's registry
LoadRigParams();

' Test and Training block parameters
var nTestBlocks%       := 3;      'Number of pre/post-training test blocks [default 3]
var testBlockDuration  := 45.0;   'Total duration (s) of test blocks [default 45.0]
var nTrainingBlocks%   := 3;      'Number of training blocks [default 3]
var trainBlockDuration := 600.0;  'Total duration (s) of training block(s) [default 600.0]
var testingType%       := 3;      'Defines the testing type for the experiment [default 3, VORD]
var trainingType%      := 0;      'Defines the training type for the experiment [default 0, VORx2]
var includeMidTests%   := 1;      'Flag variable for defining whether to add mid-test blocks between training blocks [default 1]

' Gap block parameters
var gapDur   := 5.0;  'Total duration (in seconds) of each gap block [default 5.0]
var flashDur := 0.2;  'Duration of TTL flash (in seconds) halfway into each gap block [default 0.2]

' Drum stimulus default sine parameters
var drumAmp           := 10.0;             'Drum amplitude in deg/s [default -10.0]
var drumFreq          := 1;                 'Drum frequency in Hz [default 1]
var drumPeriod        := 1/drumFreq;        'Drum period in seconds
var drumPhase         := -90;               'Drum phase in degrees [default -90]
var nDrumTestCycles%, nDrumTrainCycles%;    'Number of drum TEST and TRAIN block cyles

' Chair stimulus default sine parameters
var chairAmp       := -10.0;                 'In deg/s [default 10.0]
var chairFreq      := 1;                    'In Hz [default 1]
var chairPeriod    := 1/chairFreq;          'In seconds 
var chairPhase     := -90;                  'In degrees [default -90] NOTE: THIS SHOULD NOT BE CHANGED
var nChairTestCycles%, nChairTrainCycles%;  'Number of chair TEST and TRAIN block cyles

' Compute values for quarter and half cycles
var period% := Round(sampleRate / chairFreq);
var halfCycle := (sampleRate/chairFreq) / 2;
var quarterCycle := halfCycle / 2;

' Target mean of drum and chair stimuli during driftFix correction
var drumSinPosMean := (-1 * drumAmp / (2 * _pi * drumFreq)) * sin(drumPhase * (_pi / 180));
var chairSinPosMean := (-1 * chairAmp / (2 * _pi * chairFreq)) * sin(chairPhase * (_pi / 180));
PrintLog("Drum Sine Mean Target Amplitude:  ", drumSinPosMean);
PrintLog("Chair Sine Mean Target Amplitude:  ", chairSinPosMean);

' driftFix parameters
var Kp            := 0.6;  'Proportional correction gain [default 0.45]
var Ki            := 0.1;  'Integral correction gain [default 0.54]
var intErrorLimit := 0.3;  'Integral clamping limit [default 0.3]
var htposIntError, hhposIntError;  'Cumulative (integral) error
var prevBlockFlag%   := 0;  'Previous blockFlag% for transition detection
var suspendUntil     := 0;  'Time until which driftFix should be suspended
var lastDriftFixTime := 0;  'Time that last driftFix was executed

' ToolbarIdle% global variables
var nBlocks%, blockList$[1], blockLabelList$[1];
var blockNum%;      'Counter which defines which block number is currently active
var blockFlag%;     'Flag which defines whether a block is actively running or not
var blockMarkers$;  'Provides the SampleKey commands for the currently active block
var runFlag%;       'Flag which denotes whether the experiment is activately running or not
var lowerSampleKey$, upperSampleKey$;
var pretestBlockNum%, trainBlockNum%, posttestBlockNum%, midtestBlockNum%;
var blockStartTime, blockEndTime;

' Set initial number of test and train block cyles
SetNumTestTrainCycles();


'--------------------------------------------------------------------------------
' DRIFTFIX: Applies velocity offset correction when necessary
'
' Applies Proportional-Integral (PI) control such that the output velocity offset 
' v(t) is given by the formula:
'
' v(t) = v(0) - Kp*e(t) - Ki*Int[e(t)*dt]
' 
' Where:
' v(0)         - Initial velocity offset of the motor
' Kp           - Proportional gain
' e(t)         - Average feedback position error 
' Ki           - Integral gain
' Int[e(t)*dt] - Cumulative sum of errors over time 
'
' Notes:
' 1. We control windup by clamping the absolute integral error to intErrorMax.
'--------------------------------------------------------------------------------
Func driftFix%()
    ' Get the current sampling time
    var currentTime := MaxTime();

    if (currentTime < suspendUntil) then
        ' Bypass driftFix one cycle period after the beginning and end of each block
        return 1;  
    endif;

    var dt := currentTime - lastDriftFixTime;
    if dt < chairPeriod then 
        ' Limit drift correction to only once per stimulus cycle period (previously was "dt < sampleStepsize")
        return 1;  
    endif;
    lastDriftFixTime := currentTime;

    var drumTempAmp := Int16ToAmp(SampleSeqVar(100), drumVelocity2Voltage);
    var chairTempAmp := Int16ToAmp(SampleSeqVar(101), chairVelocity2Voltage);
    var drumSinPosMean := (-1 * drumTempAmp / (2 * _pi * drumFreq)) * sin(drumPhase * (_pi / 180));
    var chairSinPosMean := (-1 * chairTempAmp / (2 * _pi * chairFreq)) * sin(chairPhase * (_pi / 180));

    ' Error is defined as the mean of the last cycle relative to the computed expected mean
    var htposCurrError := ChanMeasure(htpos_ch%, 2, currentTime-drumPeriod, currentTime) - drumSinPosMean; 
    var hhposCurrError := ChanMeasure(hhpos_ch%, 2, currentTime-chairPeriod, currentTime) - chairSinPosMean; 

    ' Final Proportional error term
    var htposProportionalError := Kp * htposCurrError;
    var hhposProportionalError := Kp * hhposCurrError;

    ' Integral error term is the scaled cumulative sum of errors
    var htposIntErrorTest := htposIntError + (Ki * htposCurrError * dt);
    var hhposIntErrorTest := hhposIntError + (Ki * hhposCurrError * dt);

    ' Apply anti-windup integral condition (only increase IntError if below limit)
    if Abs(htposIntErrorTest) <= intErrorLimit then
        htposIntError := htposIntErrorTest;
    endif;
    if Abs(hhposIntErrorTest) <= intErrorLimit then
        hhposIntError := hhposIntErrorTest;
    endif;

    ' Final Integral error term
    var htposIntegralError := htposIntError;
    var hhposIntegralError := hhposIntError;

    ' Apply PI error correction to the drum and chair velocity offset commands
    var drumVelocityOffsetCorrection  := 0 - htposProportionalError - htposIntegralError;
    var chairVelocityOffsetCorrection := 0 - hhposProportionalError - hhposIntegralError;
    drumVelocityOffset  := drumVelocityOffsetInitial + drumVelocityOffsetCorrection;
    chairVelocityOffset := chairVelocityOffsetInitial + chairVelocityOffsetCorrection;

    'PrintLog("Drum (P=%.5f,I=%.5f,T=%.5f) | Chair (P=%.5f,I=%.5f,T=%.5f)\n", 
    '    htposProportionalError, htposIntegralError, drumVelocityOffsetCorrection,
    '    hhposProportionalError, hhposIntegralError, chairVelocityOffsetCorrection);    

    ' Update the sequencer variables with the corrected velocity offsets
    SetSequencerValues();
    return 1;
End


'--------------------------------------------------------------------------------
' GENERAL TOOLBAR FUNCTIONS
'--------------------------------------------------------------------------------

' Function that defines what happens during idle times (in computer cycles) while actively sampling
Func ToolbarIdle%()
    ' Allow "Run Expmt" button only while sampling is actually running
    if runFlag% = 0 then
        ToolbarEnable(40, SampleStatus()=2);
    endif;

    ' Check whether a valid sampling view is currently running before continuing
    if ViewKind() <> 0 then
        return 1;
    endif;

    ' Keep script commands on the sampling view even if another file is in front 
    if SampleHandle(0) > 0 then 
        View(SampleHandle(0)) 
    endif;

    if runFlag% = 1 then  'Check whether the "Run Experiment" button was pressed
        blockFlag% := SampleSeqVar(1);  'Get the current blockFlag% value from the 1401 sequencer variable
        if blockFlag% <> prevBlockFlag% then  'Set driftFix suspension period after block transitions
            suspendUntil := MaxTime() + chairPeriod;
            htposIntError := 0;
            hhposIntError := 0;
            prevBlockFlag% := blockFlag%;
        endif;
        if blockFlag% = 0 then  'Check whether a block is not currently running
            if blockNum% > 0 then
                blockEndTime := MaxTime();
                lowerSampleKey$ := Right$(blockMarkers$, 1);
                SampleKey(lowerSampleKey$);  'Sends a lower-case keyboard command that defines the end of a block (useful only for analysis)
                PrintLog("Sample time: %.4f seconds | Block number: %d of %d | Block marker: %s\n", blockEndTime, blockNum%, nBlocks%, lowerSampleKey$);
            endif; 
            if blockNum% < nBlocks% then  'Check whether current block number is not greater than or equal to maximum number of blocks
                blockStartTime := MaxTime();
                blockMarkers$ := blockList$[blockNum%];
                upperSampleKey$ := Left$(blockMarkers$, 1);
                SampleSeqVar(1, 1);  'Mark block as started before the key goes out
                SampleKey(upperSampleKey$);  'Send SampleKey() command to the 1401 sequencer of the current block's letter marker
                AddTextMark(upperSampleKey$, blockNum%);
                blockNum% := blockNum% + 1;  'Increase the block number by one
                PrintLog("Sample time: %.4f seconds | Block number: %d of %d | Block marker: %s\n", blockStartTime, blockNum%, nBlocks%, upperSampleKey$);
            else
                runFlag% := 0;  'Set experiment flag to off
                SampleKey("R");  'Reset 1401 sequencer to initial state
                SampleText("END", -1, 0); 
                SampleKey("a");  'Sends a lower-case keyboard command that defines the end of the experiment (useful only for analysis)
                ToolbarSet(40, "Run Expmt", ToolbarRunExpmt%);
                PrintLog("EXPERIMENT COMPLETE!\n\n");
                Yield(2);
                XRange();  'Zoom out to view entire experiement
            endif;
        endif;
    endif;
    ' Check whether motors are drifting and apply correction if needed
    driftFix%();
    return 1;
End

' Function that opens a new sampling window
Func ToolbarNewFile%()
    WindowSetup();         'Sets up channels in the new sampling configuration window
    ChanHide(Str$(HTPOScom_ch%)+","+Str$(HHPOScom_ch%)+",12,13,14,15"); ' Hides channels that are not used for most sine protocols
    HCursorNew(HTVELcom_ch%, 0.0); ' Adds horizontal cursor to HTVEL channel
    HCursorNew(HHVELcom_ch%, 0.0);  ' Adds horizontal cursor to HHVEL channel
    WindowUpdate();        'Updates sampling window with protocol-specific configuration
    WindowVisible(3);      'Maximizes the new sampling window to fit the screen
    ToolbarEnable(-1, 1);  'Enables buttons that require a new sampling window
    ToolbarEnable(2, 0);   'Disables "New File" button to prevent duplicate windows
    ToolbarEnable(40, 0);   'Disables "Run Expmt" button (until sampling is started)
    SetSequencerValues(); Yield();
    SampleKey("R");  'Ensures that sequencer is set to its default configuration prior to sampling
    return 1;
End

Func LockFileComments%(item%)
    if item% = 0 then         '0 = initial function call, before window display
        DlgEnable(0, 4, 5);  'Grey out comments 4 and 5
    endif;
    return 1;
End

' Function that allows embedding comments into Spike2 file itself
Func ToolbarFileComments%()
    var ii%;
    DlgCreate("FILE COMMENTS", 0, 0, 79, 7);  'Initialize new dialog window
    DlgString(1, "Comment 1:", 2000, "", 17, 1);
    DlgString(2, "Comment 2:", 2000, "", 17, 2);
    DlgString(3, "Comment 3:", 2000, "", 17, 3);
    DlgString(4, "Comment 4:", 2000, "", 17, 4);
    DlgString(5, "Comment 5:", 2000, "", 17, 5);

    DlgAllow(0x3ff, ToolbarIdle%, LockFileComments%);  'Allow all, no idle
    DlgShow(fileComments$[0], fileComments$[1], fileComments$[2], fileComments$[3], fileComments$[4]);

    SetFileComments();
    return 1;
End

' Function that runs experiment based on parameters provided in experimental configuration window
Func ToolbarRunExpmt%()
    SampleKey("A");
    SetSequencerValues();
    SampleText("START", -1, 0); 
    ToolbarSet(40, "Stop Expmt", ToolbarStopExpmt%);
    ToolbarEnable(-1, 0);  ' Disable all buttons
    ToolbarEnable(1, 1);  ' Re-enable Quit button
    ToolbarEnable(3, 1);  ' Re-enable File Comments button
    ToolbarEnable(40, 1);  ' Re-enable Start/Stop Expmt button
    Yield(2);
    runFlag% := 1;
    return 1;
End

' Function that runs experiment based on parameters provided in experimental configuration window
Func ToolbarStopExpmt%()
    SampleKey("R");
    SampleKey("a");
    runFlag% := 0;
    SampleText("END", -1, 0); 
    ToolbarSet(40, "Run Expmt", ToolbarRunExpmt%);
    return 1;
End

' Function that stops all stimuli, resets the sequencer to default, and quits out of the toolbar
Func ToolbarQuit%()
    SampleKey("R");
    SampleKey("a");
    SampleStop();
    PrintLog("MANUALLY QUIT!\n\n");
    return 0;
End

' Set number of test and train block cyles based on block duration and stim frequency
Proc SetNumTestTrainCycles()
    nDrumTestCycles%   := Round(testBlockDuration * drumFreq);    'Number of drum TEST block cycles
    nDrumTrainCycles%  := Round(trainBlockDuration * drumFreq);   'Number of drum TRAIN block cycles
    nChairTestCycles%  := Round(testBlockDuration * chairFreq);   'Number of drum TEST block cycles
    nChairTrainCycles% := Round(trainBlockDuration * chairFreq);  'Number of drum TRAIN block cycles
End