' ------------------------------------------------------------------------------
' SAMPLING WINDOW CONFIGURATION/LAYOUT
' ------------------------------------------------------------------------------

' Sampling configuration parameters
const sampleRate := 1000;  'Sequencer sample rate in Hz, MUST be the same value given in the sequencer file
var sampleStepsize := 1/sampleRate;  'Sequencer sample rate step size in seconds

' Define the standard channel layout for all protocols
' Note: 1401 ports start from 0 but Spike2 channels start from 1
var HTVELcom_ch% := 1;
var HHVELcom_ch% := 2;
var HTPOScom_ch% := 3; 
var HHPOScom_ch% := 4; 
var hepos1_ch% := 5; 
var hepos2_ch% := 6; 
var htpos_ch% := 7; 
var hhpos_ch% := 8; 
var htvel_ch% := 9;
var hhvel_ch% := 10;
var TTL1_ch% := 11;
var TTL2_ch% := 12; 
var TTL3_ch% := 13; 
var TTL4_ch% := 14; 
var TTL5_ch% := 15;
var htposTalk_ch% := 16;
var hhposTalk_ch% := 17;

' Initialize sampling window variable
var sampling_window%;

' Initialize filepath variables for an optional waveform
var waveFilePath$;
var wavefile_error%;

' Initialize array to hold file comments
var fileComments$[5];


' Sets the file comments into the .smrx/.smr file
Proc SetFileComments()
    var ii%;
    for ii% := 1 to 5 do
        FileComment$(ii%, fileComments$[ii%-1]);
        if ii% = 5 then
            PrintLog("\nAdded file comment %d: %s\n", ii%, fileComments$[ii%-1]);
        else
            PrintLog("\nAdded file comment %d: %s", ii%, fileComments$[ii%-1]);
        endif;
        
    next;
End

' Gets the file path of a selected waveform file to add online
Proc LoadWaveform()
    wavefile_error% := FileOpen("", 0, 8, "Select waveform file to use");
    if wavefile_error% > -1 then
        FrontView(wavefile_error%); 
        waveFilePath$ := FileName$();
        PrintLog("Waveform loaded: %s\n\n", waveFilePath$);
    else
        PrintLog("No waveform loaded!\n\n", waveFilePath$);
    endif
end

Proc AddWaveformChannel(channel%, port%, units$, scale, offset, title$, comment$)
    SampleWaveform(channel%, port%, sampleRate, 1);
    SampleCalibrate(channel%, units$, scale, offset);
    SampleTitle$(channel%, title$);
    SampleComment$(channel%, comment$);
end

Proc AddTalkerChannel(channel%, port$, title$, comment$)
    SampleTalker(channel%, port$, 0);
    SampleTitle$(channel%, title$);
    SampleComment$(channel%, comment$);
end

' Configures the sampling window channels, layout, appearance, etc.
Proc WindowSetup()
    ' Set sampling configuration window to a standard state
    SampleClear();

    ' Attempt to set the sequencer file and halt script on error
    var setseq_error% := SampleSequencer(sequencerFile$);
    if setseq_error% < 0 then
        Message("Sequencer file could not be set: %s", Error$(setseq_error%));
        halt
    endif

    SampleSeqCtrl(1, 1);  'Set seqencer jump control to control panel and script only

    'LoadWaveform();
    'if wavefile_error% > -1 then
    '    PlayWaveAdd("w", "wave", HHVELcom_port%, 0, 10000, HHVELcom_ch%, 0, waveFilePath$);
    '    PlayWaveCycles("w", 0);
    'endif

    ' Ch 1: HTVEL - Horizontal Target Velocity (Command from 1401 to drum)
    if HTVELcom_port% >= 0 then 
        AddWaveformChannel(HTVELcom_ch%, HTVELcom_port%, "deg/s", HTVELcom_chScaling, HTVELcom_chOffset, "HTVEL", "Velocity command signal sent from the 1401 to the drum");
    endif

    ' Ch 2: HHVEL - Horizontal Head Velocity (Command from 1401 to chair)
    if HHVELcom_port% >= 0 then
        AddWaveformChannel(HHVELcom_ch%, HHVELcom_port%, "deg/s", HHVELcom_chScaling, HHVELcom_chOffset, "HHVEL", "Velocity command signal sent from the 1401 to the chair");
    endif

    ' Ch 3: HTPOS - Drum Position for driftFix (Virtual Channel derived from htpos)
    if HTPOScom_port% >= 0 then
        AddWaveformChannel(HTPOScom_ch%, HTPOScom_port%, "deg", HTPOScom_chScaling, HTPOScom_chOffset, "HTPOS", "Position command signal sent from the 1401 to the drum");
    endif
    
    ' Ch 4: HHPOS - Head Position for driftFix (Virtual Channel derived from hhpos)
    if HHPOScom_port% >= 0 then
        AddWaveformChannel(HHPOScom_ch%, HHPOScom_port%, "deg", HHPOScom_chScaling, HHPOScom_chOffset, "HHPOS", "Position command signal sent from the 1401 to the chair");
    endif

    ' Ch 5: hepos1 - Horizontal Eye Position 1
    AddWaveformChannel(hepos1_ch%, hepos1_port%, "V", hepos1_chScaling, hepos1_chOffset, "hepos1", "Eye position 1");

    ' Ch 6: hepos2 - Horizontal Eye Position 2
    AddWaveformChannel(hepos2_ch%, hepos2_port%, "V", hepos2_chScaling, hepos2_chOffset, "hepos2", "Eye position 2");

    ' Ch 7: htpos - Horizontal Target Position (feedback from drum motor)
    docase
        case htpos_port% >= 0 then
            AddWaveformChannel(htpos_ch%, htpos_port%, "deg", htpos_chScaling, htpos_chOffset, "htpos", "Drum position feedback from motor encoder");
        case htpos_port% = -1 then 
            AddTalkerChannel(htposTalk_ch%, "LS7366", "htposTalker", "Drum position feedback from motor encoder (talker)");
        case htpos_port% = -2 then
            AddTalkerChannel(htposTalk_ch%, "LS7366-3", "htposTalker", "Drum position feedback from motor encoder (talker)");
    endcase

    ' Ch 8: hhpos - Horizontal Head Position (feedback from chair motor)
    docase
        case hhpos_port% >= 0 then
            AddWaveformChannel(hhpos_ch%, hhpos_port%, "deg", hhpos_chScaling, hhpos_chOffset, "hhpos", "Chair position feedback from motor encoder");
        case hhpos_port% = -1 then
            AddTalkerChannel(hhposTalk_ch%, "LS7366", "hhposTalker", "Chair position feedback from motor encoder (talker)");
        case hhpos_port% = -2 then
            AddTalkerChannel(hhposTalk_ch%, "LS7366-3", "hhposTalker", "Chair position feedback from motor encoder (talker)");
    endcase

    ' Ch 9: htvel - Horizontal Target Velocity (feedback from drum motor)
    if htvel_port% >= 0 then
        AddWaveformChannel(htvel_ch%, htvel_port%, "deg/s", htvel_chScaling, htvel_chOffset, "htvel", "Drum velocity feedback from motor encoder");
    endif

    ' Ch 10: hhvel - Horizontal Head Velocity (feedback from chair motor)
    if hhvel_port% >= 0 then
        AddWaveformChannel(hhvel_ch%, hhvel_port%, "deg/s", hhvel_chScaling, hhvel_chOffset, "hhvel", "Chair velocity feedback from motor encoder");
    endif
    
    ' TTL 1: Shutter/LED/Light
    SampleEvent(TTL1_ch%, TTL1_port%, 2, sampleRate);
    SampleTitle$(TTL1_ch%, "TTL1");
    SampleComment$(TTL1_ch%, "TTL1: Shutter");

    ' TTL 2: Rising Trigger
    SampleEvent(TTL2_ch%, TTL2_port%, 2, sampleRate);
    SampleTitle$(TTL2_ch%, "TTL2");
    SampleComment$(TTL2_ch%, "TTL2");
    
    ' TTL 3: L Laser
    SampleEvent(TTL3_ch%, TTL3_port%, 2, sampleRate);
    SampleTitle$(TTL3_ch%, "TTL3");
    SampleComment$(TTL3_ch%, "TTL3: L Laser");

    ' TTL 4: R Laser
    SampleEvent(TTL4_ch%, TTL4_port%, 2, sampleRate);
    SampleTitle$(TTL4_ch%, "TTL4");
    SampleComment$(TTL4_ch%, "TTL4: R Laser");

    ' TTL 5
    SampleEvent(TTL5_ch%, TTL5_port%, 2, sampleRate);
    SampleTitle$(TTL5_ch%, "TTL5");
    SampleComment$(TTL5_ch%, "TTL5");
    
    ' TextMark: Event keyboard markers
    SampleTextMark(200);
    
    SampleOptimise(1, 1, 2, 1, 50);  'Sets sample rate optimising settings
    SampleMode(1);  'Sets sampling mode to Continuous recording mode
    sampling_window% := FileNew(0, 1);  'Create and display immediately a new Spike2 data file
    
    ViewColourSet(0, .87, .87, .87);  'Sets the background color
    FontSet("Verdana", 8, 0);  'Sets the font type and size

    ' Adjust scaling, offset, and units of htpos channel if necessary
    if (htpos_port% = -1) or (htpos_port% = -2) then
        htpos_ch% := VirtualChan(0, "", 0, 1.0/sampleRate);
        VirtualChan(htpos_ch%, Str$(htpos_chScaling)+"*rm("+Str$(htposTalk_ch%)+")+("+Str$(htpos_chOffset)+")", 0, 1.0/sampleRate);
        ChanUnits$(htpos_ch%, "deg");
        ChanTitle$(htpos_ch%, "htpos"); 
        ChanComment$(htpos_ch%, "Drum position feedback from motor encoder (talker)");
    endif

    ' Adjust scaling, offset, and units of hhpos channel if necessary
    if (hhpos_port% = -1) or (hhpos_port% = -2) then
        hhpos_ch% := VirtualChan(0, "", 0, 1.0/sampleRate);
        VirtualChan(hhpos_ch%, Str$(hhpos_chScaling)+"*rm("+Str$(hhposTalk_ch%)+")+("+Str$(hhpos_chOffset)+")", 0, 1.0/sampleRate);
        ChanUnits$(hhpos_ch%, "deg");
        ChanTitle$(hhpos_ch%, "hhpos"); 
        ChanComment$(hhpos_ch%, "Chair position feedback from motor encoder (talker)");
    endif

    ' Virtual Channel: htvel - Horizontal Target Velocity (feedback derived from htpos)
    if (htvel_port% = -3) or (htvel_port% = -4) then 
        htvel_ch% := VirtualChan(0, "", 0, 0.001);
        if (htvel_port% = -4) then
            VirtualChan(htvel_ch%, Str$(htvel_chScaling)+"*rm("+Str$(htposTalk_ch%)+")", 0, 1.0/sampleRate);
        else
            VirtualChan(htvel_ch%, Str$(htvel_chScaling)+"*ch("+Str$(htpos_ch%)+")", 0, 1.0/sampleRate);
        endif
        ChanProcessAdd(htvel_ch%, 1, 0.011);
        ChanProcessAdd(htvel_ch%, 3, 0.003);
        ChanUnits$(htvel_ch%, "deg/s");
        ChanTitle$(htvel_ch%, "htvel"); 
        ChanComment$(htvel_ch%, "Drum velocity feedback derived from htpos");
    endif

    ' Virtual Channel: hhvel - Horizontal Head Velocity (feedback derived from hhpos)
    if (hhvel_port% = -3) or (hhvel_port% = -4) then 
        hhvel_ch% := VirtualChan(0, "", 0, 0.001);
        if (hhvel_port% = -4) then
            VirtualChan(hhvel_ch%, Str$(hhvel_chScaling)+"*rm("+Str$(hhposTalk_ch%)+")", 0, 1.0/sampleRate);
        else
            VirtualChan(hhvel_ch%, Str$(hhvel_chScaling)+"*ch("+Str$(hhpos_ch%)+")", 0, 1.0/sampleRate);
        endif
        ChanProcessAdd(hhvel_ch%, 1, 0.011);
        ChanProcessAdd(hhvel_ch%, 3, 0.003);
        ChanUnits$(hhvel_ch%, "deg/s");
        ChanTitle$(hhvel_ch%, "hhvel"); 
        ChanComment$(hhvel_ch%, "Chair velocity feedback derived from hhpos");
    endif

        ' Virtual Channel: HTPOS - Horizontal Target Position (derived from htpos)
    if HTPOScom_port% = -3 then 
        HTPOScom_ch% := VirtualChan(0, "", 0, 0.001);
        VirtualChan(HTPOScom_ch%, "ch("+Str$(htpos_ch%)+")", 0, 1.0/sampleRate);
        ChanUnits$(HTPOScom_ch%, "deg");
        ChanTitle$(HTPOScom_ch%, "HTPOS"); 
        ChanComment$(HTPOScom_ch%, "Target Position for driftFix derived from htpos");
    endif

    ' Virtual Channel: HHPos - Horizontal Head Position (derived from hhpos)
    if HHPOScom_port% = -3 then 
        HHPOScom_ch% := VirtualChan(0, "", 0, 0.001);
        VirtualChan(HHPOScom_ch%, "ch("+Str$(hhpos_ch%)+")", 0, 1.0/sampleRate);
        ChanUnits$(HHPOScom_ch%, "deg");
        ChanTitle$(HHPOScom_ch%, "HHPOS"); 
        ChanComment$(HHPOScom_ch%, "Head Position for driftFix derived from hhpos");
    endif

    ' Virtual Channel: HTVEL - Horizontal Target Velocity (derived from HTPOS)
    if HTVELcom_port% = -3 then 
        HTVELcom_ch% := VirtualChan(0, "", 0, 0.001);
        VirtualChan(HTVELcom_ch%, Str$(HTVELcom_chScaling)+"*ch("+Str$(HTPOScom_ch%)+")", 0, 1.0/sampleRate);
        ChanProcessAdd(HTVELcom_ch%, 1, 0.011);
        ChanProcessAdd(HTVELcom_ch%, 3, 0.003);
        ChanUnits$(HTVELcom_ch%, "deg/s");
        ChanTitle$(HTVELcom_ch%, "HTVEL"); 
        ChanComment$(HTVELcom_ch%, "Drum velocity derived from HTPOS");
    endif

    ' Virtual Channel: HHVEL - Horizontal Head Velocity (derived from HHPOS)
    if HHVELcom_port% = -3 then 
        HHVELcom_ch% := VirtualChan(0, "", 0, 0.001);
        VirtualChan(HHVELcom_ch%, Str$(HHVELcom_chScaling)+"*ch("+Str$(HHPOScom_ch%)+")", 0, 1.0/sampleRate);
        ChanProcessAdd(HHVELcom_ch%, 1, 0.011);
        ChanProcessAdd(HHVELcom_ch%, 3, 0.003);
        ChanUnits$(HHVELcom_ch%, "deg/s");
        ChanTitle$(HHVELcom_ch%, "HHVEL"); 
        ChanComment$(HHVELcom_ch%, "Chair velocity derived from HHPOS");
    endif
    
    ' Ensure the standard channels are visible and in default order
    ChanShow(-1);
    ChanOrder(0, -1, "5,6,"+Str$(htpos_ch%)+","+Str$(hhpos_ch%)+","+Str$(htvel_ch%)+","+Str$(hhvel_ch%)+","+Str$(htposTalk_ch%)+","+Str$(hhposTalk_ch%)+",11,12,13,14,15,30,31");
    ChanHide("16,17");  'Hide Talker channels (not used for protocols)
    
    ' Initial y-ranges for all channels
    YRange(HTVELcom_ch%, -10.25, 10.25);
    YRange(HHVELcom_ch%, -10.25, 10.25);
    YRange(HTPOScom_ch%, -3.25, 3.25);
    YRange(HHPOScom_ch%, -3.25, 3.25);
    YRange(hepos1_ch%, -5, 5);
    YRange(hepos2_ch%, -5, 5); 
    YRange(htpos_ch%, -3.25, 3.25);
    YRange(hhpos_ch%, -3.25, 3.25);
    YRange(htvel_ch%, -10.25, 10.25);
    YRange(hhvel_ch%, -10.25, 10.25); 
    
    ' Initial x-range for all channels
    XRange(0, 60);

    ' Set channel colors
    var drumChannels$ := Str$(HTVELcom_ch%)+","+Str$(HTPOScom_ch%)+","+Str$(htpos_ch%)+","+Str$(htvel_ch%)+","+Str$(htposTalk_ch%);
    var chairChannels$ := Str$(HHVELcom_ch%)+","+Str$(HHPOScom_ch%)+","+Str$(hhpos_ch%)+","+Str$(hhvel_ch%)+","+Str$(hhposTalk_ch%);
    ChanColourSet("1..17", 1, 0, 0, 0);
    ChanColourSet(drumChannels$, 1, 0.15, 0.15, 0.6);
    ChanColourSet(chairChannels$, 1, 0.6, 0.15, 0.15);

    ' Old channel color scheme (kept here as a reference to previously used RGB color values)
    'ChanColourSet("1..15", 1, 0.501961, 0, 0.501961);
    'ChanColourSet("1..4", 1, 0, 0, 0);
    'ChanColourSet("7..10", 1, 0.122, 0.239, 0.58);
    'ChanColourSet("v1..v6", 1, 0.501961, 0, 0.752941);

    ' Displays TextMark channel as text labels rather than colored squares
    DrawMode(30, 14);
End